PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': "['practice', '1', '2', '3']", 'which eye is blue': "['right', 'left']", 'eye tested': "['right', 'left']", 'previous contrast': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = black
  expName = eyeDomExp
  exportHTML = on Save
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Routines
  Routine contWarning
    CodeComponent checkInputCont
      Code Type = Auto->JS
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      Begin Routine:
        #display txt to verify the calculated contrast was properly input
        if expInfo['previous contrast'] =='' and expInfo['session']!='practice':
            txtVar = 'You did not input the correct contrast value.  Please restart the session and input the value you wrote down from the practice session to the last entry of the dialog box'
            continueRoutine = True
        else:
            continueRoutine=False
    TextComponent warningESC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $txtVar
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Flow
  Routine contWarning
